//==========================================================================
// SET_CMD.PRO
//   Description: Setup All variables, procs for Countermanding task.
//
//   NOTE:
//   Author: chenchal.subraveti@vanderbilt.edu
//   Date: 2019-01-24
//==========================================================================
//  Revision History:

// Load all constants and related gobal vars
#include C:/TEMPO/ProcLib/CONSTNTS.PRO
// CMD Vars only...?
#include C:/TEMPO/ProcLib/CMD/VAR_CMD.PRO
// State defs
#include C:/TEMPO/ProcLib/CMD/STATES/CMD_STAT.PRO
// Rig specific vars for colors, mainly
#include C:/TEMPO/ProcLib/RIG/VAR_RIG.PRO
// Stimulus Variables: fixation, target, photodiode
#include C:/TEMPO/ProcLib/CMD/VAR_STIM.PRO
// Set palatte colors and color indices
#include C:/TEMPO/ProcLib/CMD/SET_CLRS.PRO
// Setup GRAPHS - referenced by _PGS
#include C:/TEMPO/ProcLib/GRAFS/GRAPHS.PRO
// set pages to load CMD_PGS.PRO?
#include C:/TEMPO/ProcLib/CMD/CMD_PGS.PRO
// Setup event defs so events can be sent
#include C:/TEMPO/ProcLib/CMD/EVENTDEF.PRO

//=====Now do monk specific========
// Load all constants and related gobal vars
#include C:/TEMPO/ProcLib/RIG/SET_RIG.PRO
// Set monk
#include C:/TEMPO/ProcLib/MONK/SET_MONK.PRO

//========other utils=============
// Send event processes
#include C:/TEMPO/ProcLib/UTIL/SEND_EVT.PRO
// Set up watches
#include C:/TEMPO/ProcLib/WATCH/WTCH_EYE.PRO
// Set up watches
#include C:/TEMPO/ProcLib/WATCH/WTCH_PD.PRO

declare SET_CMD_TRL();
declare SET_WINS();
declare PCK_TRL_TYP();
declare INIT_TRL_VARS();

declare int TRL_NUMBER = 0;
// A temporary state acitivity
declare int PROCESS_STATE;
declare int TRL_RUNNING;
declare int TRL_TARG_VR_COUNT_TIME;
// increment trial target on duration flag
// =1 first time PD_TRIG_L is detected for Target on page
// =0 first rime PD_TRIG_R is detected for Stop signal page
// =0 when blank page for GO trial?
declare int TRL_IS_TARG_ON_FLAG;
declare int TRL_IS_TARG_ACQUIRED;
declare int TRL_IS_FIX_ACQUIRED;
declare int TRL_I_IN_FLIGHT;
// gaze fulfilled min_taqrg_hold_time
declare int TRL_IS_TARG_MIN_THT;

declare int TRL_IS_TIMEOUT;
declare int TRL_IS_STOP_SIGNAL_ON;
declare int TRL_STOP_SIGNAL_TIME;
declare int TRL_STOP_SIGNAL_DELAY;
declare int TRL_STOP_SIGNAL_DURATION;
declare int TRL_IS_NON_CANCELLED;
declare int TRL_IS_CANCELLED;

// Trial Timees
declare int TRL_CUM_TIME;
// Computed Trial length using max times as defined in VAR_CMD
// This variable is used for every trial to determine:
// if IS_TRL_LENGTH_FIXED = 1 then ITI =  TRL_DURATION - TRL_CUM_TIME
// if IS_TRL_LENGTH_FIXED = 0 then ITI = BASE_ITI_TIME
declare int TRL_DURATION;
// time trial started
declare int TRL_START_TIME;
// time trial ended same as Eot_?
declare int TRL_END_TIME;
// time monitoring eye to be outside Fix window wide
declare int TRL_GET_READY_TIME;
// gaze outside fix window for the duration of READY_TIME
declare int TRL_READY_TIME;
// how long gaze was outside FIX_WIN_LARGE
declare int TRL_GET_READY_DURATION;
// time fixspot was first ON
declare int TRL_FIX_ON_TIME;
// gaze on fixspot
declare int TRL_FIX_ACQ_TIME;
// gaze NOT on fixspot
declare int TRL_FIX_ACQ_ERROR_TIME;
// Fix hold time for this trial
declare int TRL_FIX_HOLD_TIME;
// fixation achieved gaze in FIX_WIN for FIXTIME
declare int TRL_FIXATED_TIME;
// how long gaze was in fix window
declare int TRL_FIX_HOLD_DURATION;
// when was gaze broken before TARG_ON
declare int TRL_FIX_BRK_TIME;

// when command sent to vdosync
declare int TRL_PRE_TARG_ON_TIME;
// when PD trigger occurs
declare int TRL_TARG_ON_TIME;
// Actively count how long target was on
declare int TRL_TARG_ON_DURATION;
// saccade entered target window
declare int TRL_DECIDE_TIME;
// saccde left Fix window between MIN_MAX saccade time
declare int TRL_SACC_TIME;
// saccade left Fix window before MIN saccade time
declare int TRL_ERLY_SACC_TIME;
// saccade left Fix window after MAX saccade time
declare int TRL_LATE_SACC_TIME;
// should make a saccade, but eye still in Fix window
declare int TRL_NO_SACC_TIME;
// saccade left Fix window, but eye not in Target window
declare int TRL_TARG_ACQ_ERROR_TIME;
// saccade dutation
declare int TRL_SACC_DURATION;
// saccade made within max saccade duration
declare int TRL_TARG_ACQ_TIME;
// target was fixated for this amount of time
declare int TRL_TARG_HOLD_DURATION;
// Punishment DURATION
declare int TRL_TIMEOUT_START_TIME;
declare int TRL_TIMEOUT_END_TIME;
declare int TRL_TIMEOUT_DURATION;

// target fixation broken or not
declare int TRL_TARG_MIN_THT_TIME;
declare int TRL_TARG_BRK_TIME;
declare int TRL_TARG_BRK_PRE_TONE_TIME;
declare int TRL_TARG_BRK_TONE_TIME;
declare int TRL_TARG_BRK_PRE_RWRD_TIME;
declare int TRL_TARG_BRK_RWRD_TIME;
declare int TRL_TARG_BRK_POST_RWRD_TIME;
declare int TRL_TARG_BRK_MIN_THT_TIME;

// Tone and reward times
declare int TRL_TONE_FREQ;
declare int TRL_TONE_DURATION;
declare int TRL_TONE_ON_TIME;
declare int TRL_TONE_OFF_TIME;
declare int TRL_RWRD_DURATION;
declare int TRL_RWRD_ON_TIME;
declare int TRL_RWRD_OFF_TIME;
declare int TRL_XTRA_RWRD_ON_TIME;
declare int TRL_XTRA_RWRD_OFF_TIME;
declare int TRL_ITI_START_TIME;
declare int TRL_ITI_END_TIME;
declare int TRL_ITI_DURATION;

// any break fixations?
declare int TRL_ABORT_TIME;
// number of vertical refreshs FIX with PD was on
declare int TRL_FIX_VRT_RFRSH_COUNT;
// number of vertical refreshs TARGET with PD was on
declare int TRL_TARG_VRT_RFRSH_COUNT;
// number of vertical refreshs TARGET with PD was on when stop-signal page was shown
declare int TRL_TARG_SSD_VRT_RFRSH_COUNT;


process SET_CMD_TRL()
{
    spawnwait INIT_TRL_VARS();

    // setup trial type
    spawnwait PCK_TRL_TYP();

    if (TRIAL_TYPE == TRIAL_TYPE_STOP)
    {
        // must get from SSD_ARRY; use staircasing....
        printf("**********Using RANDOM CHOICE OF SSD from SSD_ARRY*************\n");
        TRL_STOP_SIGNAL_DELAY = 10; //SSD_ARRY[random(N_SSD_MAX)];
        printf("**********TRL_STOP_SIGNAL_DELAY[in vert refresh] = [%d]\n", TRL_STOP_SIGNAL_DELAY);
    }
    else
    {
        TRL_STOP_SIGNAL_DELAY = 0;
    }
    // Pick reward and tone for successful trials
    if (TRIAL_TYPE == TRIAL_TYPE_STOP)
    {
        // what should be the freq and duartion of tone
        TRL_TONE_FREQ     = SUCCESS_TONE_MED_REWARD;
        TRL_TONE_DURATION = TONE_DURATION;

        TRL_RWRD_DURATION = RWRD_DURATION;
    }
    else
    {
        // what should be the freq and duartion of tone
        TRL_TONE_FREQ     = SUCCESS_TONE_BIG_REWARD;
        TRL_TONE_DURATION = TONE_DURATION;

        TRL_RWRD_DURATION = RWRD_DURATION * 2;
    }


    // pick current target location AND SET WINDOWS
    CURR_TARG_IDX = CURR_TARG_IDX + 1;
    CURR_TARG_IDX = (CURR_TARG_IDX) % N_TARG_POS;
    //CURR_TARG_IDX = random(N_TARG_POS);
    // Target stimulus on this trial
    CURR_TARG_SIZE         = TARG_SIZE_ARRY[CURR_TARG_IDX];
    CURR_TARG_ANGLE        = TARG_ANGLE_ARRY[CURR_TARG_IDX];
    CURR_TARG_ECCENTRICITY = TARG_ECCENTRICITY_ARRY[CURR_TARG_IDX];
    // Zero is black.  see SET_CLRS.pro
    CURR_TARG_COLOR_IDX = CLR_IDX_TARG_1;

    spawnwait SET_WINS();

    // Update graph object for Target
    spawnwait GRAF_UPD8_FIX();
    spawnwait GRAF_UPD8_TARG();

    // Show the windows - without the fixspot or target to cue user

    printf("TRIAL_TYPE %d, CURR_TARG_IDX %d, CURR_TARG_ANGLE %d\n", TRIAL_TYPE, CURR_TARG_IDX, CURR_TARG_ANGLE);

    // Setup CMD PAGES
    printf("Calling CMD-PGS\n");
    spawnwait CMD_PGS();

    // Set up any timing jitters etc
    TRL_FIX_HOLD_TIME = random(MIN_MAX_FIX_HOLD_TIME[1] - MIN_MAX_FIX_HOLD_TIME[0]) + MIN_MAX_FIX_HOLD_TIME[0];

    MIN_TARG_HOLD_TIME = USE_TONE_AND_RWRD_FOR_MIN_THT * (TONE_DELAY + TONE_DURATION + RWRD_DELAY + RWRD_DURATION) + BASE_TARG_HOLD_TIME;

    printf("MIN_TARG_HOLD_TIME = %d*(%d+%d+%d+%d) + %d = %d\n", USE_TONE_AND_RWRD_FOR_MIN_THT,
           TONE_DELAY, TONE_DURATION, RWRD_DELAY, RWRD_DURATION, BASE_TARG_HOLD_TIME, MIN_TARG_HOLD_TIME);

    ITI_TIME = BASE_ITI_TIME;

    // TRL_DURATION is computed from FIX_SPOT_ON time = TRL_START_TIME, using all max times
    TRL_DURATION = MIN_MAX_FIX_HOLD_TIME[1] + MAX_SACC_TIME + MAX_SACC_DURATION;
    TRL_DURATION = TRL_DURATION + MIN_TARG_HOLD_TIME + TONE_DELAY + TONE_DURATION + RWRD_DELAY + RWRD_DURATION;
    TRL_DURATION = TRL_DURATION + BASE_ITI_TIME;

    if (TRL_DURATION > TRL_LENGTH_TIME && IS_TRL_LENGTH_FIXED)
    {
        // error alert user that for fixed trial length duration, the computed TRL_LENGTH_TIME > than that specified
        // TRL_DURATION adjusted to
        printf("******IS_TRL_LENGTH_FIXED [%d]******\n", IS_TRL_LENGTH_FIXED);
        printf("******Computed trial length time[%d] exceeds fixed trial length time [%d] specified******\n", TRL_DURATION, TRL_LENGTH_TIME);
        printf("******Using TRL_DURATION of [%d] ms for computing ITI (as IS_TRL_LENGTH_FIXED = 1)******\n", TRL_DURATION, IS_TRL_LENGTH_FIXED);
        //dshow Main_menu;
    }
} /* SETC_TRL */


process PCK_TRL_TYP()
{
    declare float trlType;

    trlType = (1.0 + random(9999))/100.0;
    if (trlType <= GO_WEIGHT)
    {
        TRIAL_TYPE = TRIAL_TYPE_GO;
    }
    else
    {
        TRIAL_TYPE = TRIAL_TYPE_STOP;
    }
}/* PCK_TRL_TYP */


process SET_WINS()
{
    declare float eccX, eccY;

    // Compute fix win size
    // Fix spot center is at 0,0, so we do not need to compute
    FIX_WIN[LEFT]  = -FIX_WIN_SIZE/2;
    FIX_WIN[RIGHT] = FIX_WIN_SIZE/2;
    FIX_WIN[UP]    = -FIX_WIN_SIZE/2;
    FIX_WIN[DOWN]  = FIX_WIN_SIZE/2;
    // Larger fix win - For inaccurate eye position
    FIX_WIN_LARGE[LEFT]  = -FIX_WIN_SIZE_LARGE/2;
    FIX_WIN_LARGE[RIGHT] = FIX_WIN_SIZE_LARGE/2;
    FIX_WIN_LARGE[UP]    = -FIX_WIN_SIZE_LARGE/2;
    FIX_WIN_LARGE[DOWN]  = FIX_WIN_SIZE_LARGE/2;
    // Compute TARG_WIN and TARG_WIN_LARGE
    eccX            = cos(TARG_ANGLE_ARRY[CURR_TARG_IDX]) * TARG_ECCENTRICITY_ARRY[CURR_TARG_IDX];
    eccY            = -sin(TARG_ANGLE_ARRY[CURR_TARG_IDX]) * TARG_ECCENTRICITY_ARRY[CURR_TARG_IDX];
    TARG_WIN[LEFT]  = eccX - TARG_WIN_SIZE/2;
    TARG_WIN[RIGHT] = eccX + TARG_WIN_SIZE/2;
    TARG_WIN[UP]    = eccY - TARG_WIN_SIZE/2;
    TARG_WIN[DOWN]  = eccY + TARG_WIN_SIZE/2;
    // Larger target window - For inaccurate eye position
    TARG_WIN_LARGE[LEFT]  = eccX - TARG_WIN_SIZE_LARGE/2;
    TARG_WIN_LARGE[RIGHT] = eccX + TARG_WIN_SIZE_LARGE/2;
    TARG_WIN_LARGE[UP]    = eccY - TARG_WIN_SIZE_LARGE/2;
    TARG_WIN_LARGE[DOWN]  = eccY + TARG_WIN_SIZE_LARGE/2;
    // Compute TARG_WIN_ANTI and TARG_WIN_LARGE_ANTI
    eccX                 = cos(TARG_ANGLE_ARRY[CURR_TARG_IDX] + 180) * TARG_ECCENTRICITY_ARRY[CURR_TARG_IDX];
    eccY                 = -sin(TARG_ANGLE_ARRY[CURR_TARG_IDX] + 180) * TARG_ECCENTRICITY_ARRY[CURR_TARG_IDX];
    TARG_WIN_ANTI[LEFT]  = eccX - TARG_WIN_SIZE/2;
    TARG_WIN_ANTI[RIGHT] = eccX + TARG_WIN_SIZE/2;
    TARG_WIN_ANTI[UP]    = eccY - TARG_WIN_SIZE/2;
    TARG_WIN_ANTI[DOWN]  = eccY + TARG_WIN_SIZE/2;
    // Larget ANTI target window - For inaccurate Eye position
    TARG_WIN_ANTI_LARGE[LEFT]  = eccX - TARG_WIN_SIZE_LARGE/2;
    TARG_WIN_ANTI_LARGE[RIGHT] = eccX + TARG_WIN_SIZE_LARGE/2;
    TARG_WIN_ANTI_LARGE[UP]    = eccY - TARG_WIN_SIZE_LARGE/2;
    TARG_WIN_ANTI_LARGE[DOWN]  = eccY + TARG_WIN_SIZE_LARGE/2;
} /* SET_WINS */


process INIT_TRL_VARS()
{
    // do not init TRL_NUMBER
    PROCESS_STATE                = 0;
    TRL_RUNNING                  = 0;
    TRL_TARG_VR_COUNT_TIME       = 0;
    TRL_IS_TARG_ON_FLAG          = 0;
    TRL_IS_TARG_ACQUIRED         = 0;
    TRL_IS_FIX_ACQUIRED          = 0;
    TRL_I_IN_FLIGHT              = 0;
    TRL_IS_TARG_MIN_THT          = 0;
    TRL_IS_TIMEOUT               = 0;
    TRL_IS_STOP_SIGNAL_ON        = 0;
    TRL_STOP_SIGNAL_TIME         = 0;
    TRL_STOP_SIGNAL_DELAY        = 0;
    TRL_STOP_SIGNAL_DURATION     = 0;
    TRL_IS_NON_CANCELLED         = 0;
    TRL_IS_CANCELLED             = 0;
    TRL_CUM_TIME                 = 0;
    TRL_START_TIME               = 0;
    TRL_END_TIME                 = 0;
    TRL_GET_READY_TIME           = 0;
    TRL_READY_TIME               = 0;
    TRL_GET_READY_DURATION       = 0;
    TRL_FIX_ON_TIME              = 0;
    TRL_FIX_ACQ_TIME             = 0;
    TRL_FIX_ACQ_ERROR_TIME       = 0;
    TRL_FIX_HOLD_TIME            = 0;
    TRL_FIXATED_TIME             = 0;
    TRL_FIX_HOLD_DURATION        = 0;
    TRL_FIX_BRK_TIME             = 0;
    TRL_PRE_TARG_ON_TIME         = 0;
    TRL_TARG_ON_TIME             = 0;
    TRL_TARG_ON_DURATION         = 0;
    TRL_DECIDE_TIME              = 0;
    TRL_SACC_TIME                = 0;
    TRL_ERLY_SACC_TIME           = 0;
    TRL_LATE_SACC_TIME           = 0;
    TRL_NO_SACC_TIME             = 0;
    TRL_TARG_ACQ_ERROR_TIME      = 0;
    TRL_SACC_DURATION            = 0;
    TRL_TARG_ACQ_TIME            = 0;
    TRL_TARG_MIN_THT_TIME        = 0;
    TRL_TARG_HOLD_DURATION       = 0;
    TRL_TIMEOUT_START_TIME       = 0;
    TRL_TIMEOUT_END_TIME         = 0;
    TRL_TIMEOUT_DURATION         = 0;
    TRL_TARG_BRK_TIME            = 0;
    TRL_TARG_BRK_PRE_TONE_TIME   = 0;
    TRL_TARG_BRK_TONE_TIME       = 0;
    TRL_TARG_BRK_PRE_RWRD_TIME   = 0;
    TRL_TARG_BRK_RWRD_TIME       = 0;
    TRL_TARG_BRK_POST_RWRD_TIME  = 0;
    TRL_TARG_BRK_MIN_THT_TIME    = 0;
    TRL_TONE_FREQ                = 0;
    TRL_TONE_DURATION            = 0;
    TRL_TONE_ON_TIME             = 0;
    TRL_TONE_OFF_TIME            = 0;
    TRL_RWRD_DURATION            = 0;
    TRL_RWRD_ON_TIME             = 0;
    TRL_RWRD_OFF_TIME            = 0;
    TRL_XTRA_RWRD_ON_TIME        = 0;
    TRL_XTRA_RWRD_OFF_TIME       = 0;
    TRL_ITI_START_TIME           = 0;
    TRL_ITI_END_TIME             = 0;
    TRL_ITI_DURATION             = 0;
    TRL_ABORT_TIME               = 0;
    TRL_FIX_VRT_RFRSH_COUNT      = 0;
    TRL_TARG_VRT_RFRSH_COUNT     = 0;
    TRL_TARG_SSD_VRT_RFRSH_COUNT = 0;
} /* INIT_TRL_VARS */
